PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = IAT
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Routines
  Routine trial
    ImageComponent label_left
      image [set every repeat] = $leftLabel
      pos = (-0.4, 0.4)
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent label_right
      image [set every repeat] = rightLabel
      pos = (0.4, 0.4)
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent fixation
      fillColor = red
      opacity = 0
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent stim
      image [set every repeat] = $stims
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine preBlockInstr
    ImageComponent preBlockInstr_image
      image [set every repeat] = $InstrImage
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent preBlockInstr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine endBlockInstr
    ImageComponent endBlockInstr_image
      image = endBlockInstr.png
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endBlockInstr_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = IAT_block_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_loop': '/Users/hll/Desktop/IAT/IAT_block1.xlsx', 'reps': 1, 'leftLabel': '/Users/hll/Desktop/IAT/pos_e.png', 'rightLabel': '/Users/hll/Desktop/IAT/neg_i.png', 'InstrImage': '/Users/hll/Desktop/IAT/preBlockInstr1.png'},
      {'block_loop': '/Users/hll/Desktop/IAT/IAT_block2.xlsx', 'reps': 1, 'leftLabel': '/Users/hll/Desktop/IAT/exp_e.png', 'rightLabel': '/Users/hll/Desktop/IAT/inh_i.png', 'InstrImage': '/Users/hll/Desktop/IAT/preBlockInstr2.png'},
      {'block_loop': '/Users/hll/Desktop/IAT/IAT_block34.xlsx', 'reps': 1, 'leftLabel': '/Users/hll/Desktop/IAT/exporpos_e.png', 'rightLabel': '/Users/hll/Desktop/IAT/inhorneg_i.png', 'InstrImage': '/Users/hll/Desktop/IAT/preBlockInstr3.png'},
      {'block_loop': '/Users/hll/Desktop/IAT/IAT_block34.xlsx', 'reps': 1, 'leftLabel': '/Users/hll/Desktop/IAT/exporpos_e.png', 'rightLabel': '/Users/hll/Desktop/IAT/inhorneg_i.png', 'InstrImage': '/Users/hll/Desktop/IAT/preBlockInstr4.png'},
      {'block_loop': '/Users/hll/Desktop/IAT/IAT_block5.xlsx', 'reps': 1, 'leftLabel': '/Users/hll/Desktop/IAT/inh_e.png', 'rightLabel': '/Users/hll/Desktop/IAT/exp_i.png', 'InstrImage': '/Users/hll/Desktop/IAT/preBlockInstr5.png'},
      {'block_loop': '/Users/hll/Desktop/IAT/IAT_block67.xlsx', 'reps': 1, 'leftLabel': '/Users/hll/Desktop/IAT/inhorpos_e.png', 'rightLabel': '/Users/hll/Desktop/IAT/exporneg_i.png', 'InstrImage': '/Users/hll/Desktop/IAT/preBlockInstr6.png'}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
    Routine preBlockInstr
    LoopInitiator SingleBlock loopType="TrialHandler"
      conditionsFile = $block_loop
      loopType = random
      nReps = reps
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      Routine trial
    LoopTerminator SingleBlock
    Routine endBlockInstr
  LoopTerminator blocks
